#RECOGNITION TASK
#RECOGNITION PHASE
scenario = "Recognition Task Recognition";

default_font_size = 20;
default_font = "Arial";
default_text_color = 0,0,0;
default_background_color = 255,255,255;
active_buttons = 3;
button_codes = 1, 2, 3; #1=yes 2=no 3=enter
response_matching = simple_matching;
stimulus_properties = trail_phase, string, cue, string, cue_durations, number, cuestatus, string, target, string, ITT, number, trial_number, number;
event_code_delimiter = ",";
pcl_file = "RecognitionTaskR.pcl";
begin;

#INSTRUCTIONS

trial {
 trial_duration = forever;
 trial_type = specific_response;
 terminator_button = 3;
 
 stimulus_event {
  picture {
   background_color = 255, 255, 255;
   
   text {background_color = 255,255,255; font_color = 0,0,139,200; font = "Arial";
     caption = "A következő részben a korábban látott szavak mellett új szavakat is látni fog. 
Arra kérjük Önt, hogy gombnyomással jelezze, 
hogy az adott szót látta-e korábban (RÉGI) vagy sem (ÚJ).

A RÉGI szavak esetén nyomja meg a BAL nyíl gombot.
Az ÚJ szavak esetén nyomja meg a JOBB nyíl gombot. 

A továbblépéshez nyomja meg az ENTER gombot.";
    } instruction1;
    x = 0; y = 0;
  }instruction1_pic;
  target_button = 3;
 }instruction1_event;
}instruction1_trial;

trial {
 trial_duration = forever;
 trial_type = specific_response;
 terminator_button = 3;

 stimulus_event {
  picture {
   background_color = 255,255,255;

   text {background_color = 255,255,255; font_color = 0,0,139,200; font = "Arial";
     caption = "A következő részben pár gyakorló szót fog látni.

A RÉGI szavak esetén nyomja meg a BAL nyíl gombot.
Az ÚJ szavak esetén nyomja meg a JOBB nyíl gombot.

A továbblépéshez nyomja meg az ENTER gombot.";
    } instruction2;
    x = 0; y = 0;
  }instruction2_pic;
  target_button = 3;
 }instruction2_event;
}instruction2_trial;

#PRACTICE TRIAL

trial{
 trial_duration = 3000;
 trial_type = fixed;
 terminator_button = 1, 2;

 stimulus_event {
  picture {
   background_color = 255,255,255;
   
   text {background_color = 255,255,255; font_color = 0,0,139,200; font_size = 100; font = "Arial";
    caption = "PRACTICE";
   } practice;
    x = 0; y = 0;
  }practice_pic;
  target_button = 1,2;
 }practice_event;
}practice_trial;

#INSTRUCTION

trial {
 trial_duration = forever;
 trial_type = specific_response;
 terminator_button = 3;

 stimulus_event {
  picture {
   background_color = 255,255,255;

   text {background_color = 255,255,255; font_color = 0,0,139,200; font = "Arial";
     caption = "Ha készen áll a szavakra, nyomja meg az ENTER gombot.";
    } instruction3;
    x = 0; y = 0;
  }instruction3_pic;
  target_button = 3;
 }instruction3_event;
}instruction3_trial;

#GENERAL TRIAL

trial{
 trial_duration = 3000;
 trial_type = fixed;
 terminator_button = 1, 2;
 
 stimulus_event {
  picture {
   background_color = 255,255,255;
   
   text {background_color = 255,255,255; font_color = 0,0,139,200; font_size = 100; font = "Arial";
    caption = "WORDS";
   } word_recognition;
    x = 0; y = 0;
  }word_recognition_pic;
  target_button = 1, 2;
 }word_recognition_event;
}word_recognition_trial;

#THANKS

trial{
trial_duration = forever;
 trial_type = specific_response;
 terminator_button = 3;

 stimulus_event {
  picture {
   background_color = 255,255,255;

   text { font_color = 0,0,139,200;
    caption = "Köszönjük a figyelmét, ez a feladat vége!
A kilépéshez nyomja meg az ENTER gombot.";
    } thanks;
    x = 0; y = 0;
   } thanks_pic;
   target_button = 3;
  } thanks_event;
 } thanks_trial;
